CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'Drag folder with all images. ONLY have the desired images and make sure all names match up.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory does contain "3416") (directory doesnot contain "Extras") (directory does contain "5k")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['NAMING CONVENTION: ', 'IMAGENAME.tif = RAW', 'IMAGENAME_OuterMask.tif = Outermask', 'IMAGENAME_InnerMask.tif = Innermask', 'IMAGENAME *must* contain “IM”', '', 'This module assigns ALL images that contain “IM” in the name but not “Mask” as the raw file', 'It assigns ALL images that contain “OuterMask” as outermask file', 'It assigns ALL images that contain “InnerMask” as innermask file. ', '', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "IM") (file doesnot contain "Mask")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "OuterMask")
    Name to assign these images:OuterMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "InnerMask")
    Name to assign these images:InnerMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the inner objects (axons)']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
    Select the input image:InnerMask
    Name the primary objects to be identified:inner_peri
    Typical diameter of objects, in pixel units (Min,Max):20,1000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify OUTER (myelinated) mask using the primary objects (inner_peri). Make sure the segmentation worked correctly; sometimes if the objects are touching too much the segmentation won’t work well.   (This is why the eye icon has been clicked on)']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
    Select the input objects:inner_peri
    Name the objects to be identified:outer_peri
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:OuterMask
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectSizeShape:[module_num:7|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notes:['Obtain measurements for inner_peri and outer_peri']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
    Select objects to measure:inner_peri
    Select objects to measure:outer_peri
    Calculate the Zernike features?:No

CalculateMath:[module_num:8|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notes:['Calculate G Ratio using inner_perimeter / outer_perimeter.']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
    Name the output measurement:GRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:inner_peri
    Select the numerator measurement:AreaShape_Perimeter
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:outer_peri
    Select the denominator measurement:AreaShape_Perimeter
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:9|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notes:['Calculate Axon Caliber in PIXELS using  (inner_peri_majoraxis + inner_peri_minoraxis) * 0.5']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
    Name the output measurement:AxonCaliber_px
    Operation:Add
    Select the first operand measurement type:Object
    Select the first operand objects:inner_peri
    Select the first operand measurement:AreaShape_MajorAxisLength
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:inner_peri
    Select the second operand measurement:AreaShape_MinorAxisLength
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:10|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notes:['Calculate Axon Caliber in MICRONS using  (inner_peri_majoraxis+ inner_peri_minoraxis) * 0.5 * um/px value', '', 'For 20K: I measured 800nm = 246px —> 1px =0.0032520um using the scale bar. Adjust the “Multiply the result by” number accordingly as needed. >> *0.5 makes the multiplication factor 0.001626026', '', 'For 15K: 0.004329 um/px using the scale bar.  >> *0.5 makes the multiplication factor 0.0021645', '', 'For 4K (folders 3414, 3416): 0.00316206 um/px using  the scale bar >> *0.5 makes multiplication factor 0.00158103', 'For 5K (folder 3416): 0.00251046 um/px using the scale bar >> *0.5 makes multiplication factor 0.00125523']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
    Name the output measurement:AxonCaliber_um
    Operation:Add
    Select the first operand measurement type:Object
    Select the first operand objects:inner_peri
    Select the first operand measurement:AreaShape_MajorAxisLength
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:inner_peri
    Select the second operand measurement:AreaShape_MinorAxisLength
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.00125523\r
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DisplayDataOnImage:[module_num:11|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notes:['Use this module to display Inner Axon Perimeter on image']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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:inner_peri
    Measurement to display:AreaShape_Perimeter
    Select the image on which to display the measurements:Raw
    Text color:#FC7F08
    Name the output image that has the measurements displayed:Inner_Peri_Display
    Font size (points):14
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:12|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notes:['Use this module to display outer axon perimeter on image']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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:outer_peri
    Measurement to display:AreaShape_Perimeter
    Select the image on which to display the measurements:Raw
    Text color:#FC7F08
    Name the output image that has the measurements displayed:Outer_Peri_Display
    Font size (points):14
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:13|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notes:['Display G Ratio for each axon object']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
    Display object or image measurements?:Object
    Select the input objects:inner_peri
    Measurement to display:Math_GRatio
    Select the image on which to display the measurements:Raw
    Text color:#FC7F08
    Name the output image that has the measurements displayed:GRatio_Display
    Font size (points):14
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:14|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notes:['Overlay inner-outer perimeter outlines on G-Ratio displayed image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GRatio_Display
    Name the output image:GRatio_Disp_Outline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:inner_peri
    Select outline color:Green
    Select objects to display:outer_peri

DisplayDataOnImage:[module_num:15|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notes:['Display Axon Caliber (in um) for each axon']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
    Display object or image measurements?:Object
    Select the input objects:inner_peri
    Measurement to display:Math_AxonCaliber_um
    Select the image on which to display the measurements:Raw
    Text color:#FB0106
    Name the output image that has the measurements displayed:AC_Display
    Font size (points):14
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:16|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notes:['Overlay inner-outer perimeter outlines on Axon Caliber displayed image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:AC_Display
    Name the output image:AC_Disp_Outline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:inner_peri
    Select outline color:Green
    Select objects to display:outer_peri

SaveImages:[module_num:17|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notes:['Save G Ratio display outlined image in .png format. Uncheck if you do not want this output. I recommend using this so if there’s anything that doesn’t match up in the numbers you can go check.']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
    Select the type of image to save:Image
    Select the image to save:GRatio_Disp_Outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GRatio_Display
    Saved file format:png
    Output file location:Same folder as image|/Users/suminkim/Box/images for sumin/Hgh Mag for g ratio
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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notes:['Save Axon Caliber displayed outlined image in .png format. Uncheck if you don’t want this output.  I recommend using this so if there’s anything that doesn’t match up in the numbers you can go check.']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
    Select the type of image to save:Image
    Select the image to save:AC_Disp_Outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_AxonCaliberDisplay
    Saved file format:png
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:19|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notes:['Export Axon Area (px^2), Major and Minor axes (px), G Ratio, Axon Caliber (in px and in um) in one file named ‘GRatio_AxonCaliber_HighMagAnalysis.csv” ', '', 'Export OUTER (myelinated) perimeter (px) and the corresponding parent object (the inner object indices) in a separate file called “OuterPerimeterandParent.csv” — can use this to manually match up the inner and outer masks and double check G-ratio.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Users/suminkim/Box/Dec 2017/OUTPUT
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:outer_peri|Parent_inner_peri,outer_peri|AreaShape_Perimeter,inner_peri|AreaShape_Perimeter,inner_peri|AreaShape_MajorAxisLength,inner_peri|AreaShape_MinorAxisLength,inner_peri|AreaShape_Area,inner_peri|Math_AxonCaliber_um,inner_peri|Math_AxonCaliber_px,inner_peri|Math_GRatio
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:3416_5k_
    Overwrite existing files without warning?:No
    Data to export:inner_peri
    Combine these object measurements with those of the previous object?:No
    File name:GRatio_AxonCaliber_HighMagAnalysis.csv
    Use the object name for the file name?:No
    Data to export:outer_peri
    Combine these object measurements with those of the previous object?:Yes
    File name:OuterPerimeterandParent.csv
    Use the object name for the file name?:No

ExportToSpreadsheet:[module_num:20|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notes:['Export Axon Area (px^2), Major and Minor axes (px), G Ratio, Axon Caliber (in px and in um) in one file named ‘GRatio_AxonCaliber_HighMagAnalysis.csv” ', '', 'Export OUTER (myelinated) perimeter (px) and the corresponding parent object (the inner object indices) in a separate file called “OuterPerimeterandParent.csv” — can use this to manually match up the inner and outer masks and double check G-ratio.']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Users/suminkim/Box/Dec 2017/OUTPUT
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:outer_peri|Parent_inner_peri,outer_peri|AreaShape_Perimeter,inner_peri|AreaShape_Perimeter,inner_peri|AreaShape_MajorAxisLength,inner_peri|AreaShape_MinorAxisLength,inner_peri|AreaShape_Area,inner_peri|Math_AxonCaliber_um,inner_peri|Math_AxonCaliber_px,inner_peri|Math_GRatio
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:409_IM012_20k
    Overwrite existing files without warning?:No
    Data to export:inner_peri
    Combine these object measurements with those of the previous object?:No
    File name:GRatio_AxonCaliber_HighMagAnalysis.csv
    Use the object name for the file name?:No
    Data to export:outer_peri
    Combine these object measurements with those of the previous object?:Yes
    File name:OuterPerimeterandParent.csv
    Use the object name for the file name?:No
