CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does endwith ".nd2")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'Do not need to extract metadata if not using a z-stack']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Select the 5th slice in z-stack to use for analysis. ', 'Can toggle to “Assign a name to all images” if using a single plane image']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Z "3")
    Name to assign these images:LoadedImage
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:LoadedImage
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Hoechst
    Channel number:2
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    Image name:Ran
    Channel number:3
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    Image name:Map2
    Channel number:4
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    Image name:Halo_Nup107

GaussianFilter:[module_num:6|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
    Select the input image:Map2
    Name the output image:Map2_Filtered
    Sigma:2

Threshold:[module_num:7|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notes:['Map2 Cell Body and Dendrite thresholding']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
    Select the input image:Map2_Filtered
    Name the output image:Map2_thresh
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
RemoveHoles:[module_num:8|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notes:['Fill nuclei holes in Map2 image. Resulting image is a coarse mask of neuronal cells.']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
    Select the input image:Map2_thresh
    Name the output image:Map2_filled
    Size of holes to fill:80

MaskImage:[module_num:9|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notes:['this module masks filled Map2 onto Ran image to identify neuronal Ran. The output is called in IdentifySecondaryObjects.']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
    Select the input image:Ran
    Name the output image:Neuronal_Ran
    Use objects or an image as a mask?:Image
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    Select image for mask:Map2_filled
    Invert the mask?:No

MaskImage:[module_num:10|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notes:['this module masks filled Map2 onto Hoechst image to identify neuronal Hoechst.']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
    Select the input image:Hoechst
    Name the output image:Neuronal_Hoechst
    Use objects or an image as a mask?:Image
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    Select image for mask:Map2_filled
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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notes:['Identify Neuronal Nuclei given the masked neuronal Hoechst image']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
    Select the input image:Neuronal_Hoechst
    Name the primary objects to be identified:Nuc
    Typical diameter of objects, in pixel units (Min,Max):55,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:Nuc
    Calculate the Zernike features?:No

DisplayDataOnImage:[module_num:13|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notes:['Display data to visualize parameters for typical nuclei to determine filtering constraints in the next step']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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nuc
    Measurement to display:AreaShape_FormFactor
    Select the image on which to display the measurements:Ran
    Text color:#FC7F08
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:14|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
    Select the objects to filter:Nuc
    Name the output objects:Nuc_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:15|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notes:['Use this module and the previous MaskImage module to use Ran as nuclear marker']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enabled:False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
    Select the input image:Neuronal_Ran
    Name the primary objects to be identified:Nuc
    Typical diameter of objects, in pixel units (Min,Max):60,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:16|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notes:['This was an attempt to see if cytoplasmic ran is successfully picked up using this module. IdentifySecondaryObjects seems to work better, so skip this one if using that.']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enabled:False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
    Select the input image:Neuronal_Ran
    Name the primary objects to be identified:Cyto_Ran
    Typical diameter of objects, in pixel units (Min,Max):100,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:17|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
    Select the input objects:Nuc_Filtered
    Name the objects to be identified:All_Ran
    Select the method to identify the secondary objects:Propagation
    Select the input image:Neuronal_Ran
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:400
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    Thresholding method:Otsu

EditObjectsManually:[module_num:18|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notes:['Edit All_Ran. Do not split objects, only delete. Avoid overlapping.']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
    Select the objects to be edited:All_Ran
    Name the edited objects:Edited_All_Ran
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:Neuronal_Ran
    Allow overlapping objects?:No

RelateObjects:[module_num:19|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notes:['Relating Nuc to Edited_All_Ran  - should not matter since Edited_All_Ran should not have been renumbered, but just in case, this step will correctly index the Nuc object. Related output is named Nuc_Ran']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
    Parent objects:Edited_All_Ran
    Child objects:Nuc_Filtered
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuc_Ran
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
IdentifyTertiaryObjects:[module_num:20|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notes:['Identify Cyto_Ran by subtracting Nuc_Ran from Edited_All_Ran ']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
    Select the larger identified objects:Edited_All_Ran
    Select the smaller identified objects:Nuc_Ran
    Name the tertiary objects to be identified:Cyto_Ran
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:21|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
    Hidden:1
    Select an image to measure:Ran
    Select objects to measure:Nuc_Ran
    Select objects to measure:Cyto_Ran

CalculateMath:[module_num:22|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
    Name the output measurement:Integrated_NC_Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuc_Ran
    Select the numerator measurement:Intensity_IntegratedIntensity_Ran
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cyto_Ran
    Select the denominator measurement:Intensity_IntegratedIntensity_Ran
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:23|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
    Name the output measurement:Mean_NC_Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuc_Ran
    Select the numerator measurement:Intensity_MeanIntensity_Ran
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cyto_Ran
    Select the denominator measurement:Intensity_MeanIntensity_Ran
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DisplayDataOnImage:[module_num:24|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notes:['For some reason, DisplayDataOnImage followed by OverlayOutlines works but not the other way around. ']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
    Display object or image measurements?:Object
    Select the input objects:Cyto_Ran
    Measurement to display:Math_Mean_NC_Ratio
    Select the image on which to display the measurements:Ran
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:NC_Ratio
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):15
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:25|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notes:['Overlaying outlines on the N/C ratio displayed image. Grayscale preserves original image much better than Color setting, though visually it’s not as pretty.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NC_Ratio
    Name the output image:NC_Ratio_Image
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:Cyto_Ran
    Select outline color:Green
    Select objects to display:Nuc_Ran

DisplayDataOnImage:[module_num:26|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
    Display object or image measurements?:Object
    Select the input objects:Nuc_Ran
    Measurement to display:Intensity_MeanIntensity_Ran
    Select the image on which to display the measurements:Ran
    Text color:#FC7F08
    Name the output image that has the measurements displayed:NucRan_MeanIntensity
    Font size (points):12
    Number of decimals:4
    Image elements to save:Image
    Annotation offset (in pixels):25
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NucRan_MeanIntensity
    Name the output image:NucRan_MeanIntensity_Image
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:Cyto_Ran
    Select outline color:Green
    Select objects to display:Nuc_Ran

DisplayDataOnImage:[module_num:28|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
    Display object or image measurements?:Object
    Select the input objects:Cyto_Ran
    Measurement to display:Intensity_MeanIntensity_Ran
    Select the image on which to display the measurements:Ran
    Text color:#FC7F08
    Name the output image that has the measurements displayed:CytoRan_MeanIntensity
    Font size (points):12
    Number of decimals:4
    Image elements to save:Image
    Annotation offset (in pixels):15
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CytoRan_MeanIntensity
    Name the output image:CytoRan_MeanIntensity_Image
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:Cyto_Ran
    Select outline color:Green
    Select objects to display:Nuc_Ran

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:CytoRan_MeanIntensity_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:LoadedImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CytoRan_MeanIntensity
    Saved file format:tiff
    Output file location:Same folder as image|20200301/20200301 DIV14 HaloTag-646 Ran-488 Map2-555/OUTPUT/RETAIN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:NucRan_MeanIntensity_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:LoadedImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucRan_MeanIntensity
    Saved file format:tiff
    Output file location:Same folder as image|20200301/20200301 DIV14 HaloTag-646 Ran-488 Map2-555/OUTPUT/RETAIN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:NC_Ratio_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:LoadedImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:N_C_Ratio
    Saved file format:tiff
    Output file location:Same folder as image|20200301/20200301 DIV14 HaloTag-646 Ran-488 Map2-555/OUTPUT/RETAIN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|20200301/20200301 DIV14 HaloTag-646 Ran-488 Map2-555/OUTPUT/FINAL
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuc_Ran|Parent_Nuc_Filtered,Nuc_Ran|Number_Object_Number,Nuc_Ran|Intensity_IntegratedIntensity_Ran,Nuc_Ran|Intensity_MeanIntensity_Ran,Nuc_Ran|Math_Integrated_NC_Ratio,Nuc_Ran|Math_Mean_NC_Ratio,Cyto_Ran|Parent_Edited_All_Ran,Cyto_Ran|Parent_Nuc_Ran,Cyto_Ran|Number_Object_Number,Cyto_Ran|Intensity_IntegratedIntensity_Ran,Cyto_Ran|Intensity_MeanIntensity_Ran,Cyto_Ran|Math_Integrated_NC_Ratio,Cyto_Ran|Math_Mean_NC_Ratio
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20200301_
    Overwrite existing files without warning?:No
    Data to export:Cyto_Ran
    Combine these object measurements with those of the previous object?:No
    File name:RAN_NC_analysis_FINAL.csv
    Use the object name for the file name?:No
    Data to export:Nuc_Ran
    Combine these object measurements with those of the previous object?:Yes
    File name:DATA.csv
    Use the object name for the file name?:No
