CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory does contain "Image") (file does contain "Ch") (directory doesnot contain "stack") (file does contain "Image1") (directory does contain "WT")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'Do not need to extract metadata if not using a z-stack']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Select the 5th slice in z-stack to use for analysis. ', 'Can toggle to “Assign a name to all images” if using a single plane image']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ch01")
    Name to assign these images:PolyA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch03")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify Neuronal Nuclei given the masked neuronal Hoechst image']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuc
    Typical diameter of objects, in pixel units (Min,Max):120,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:Nuc
    Calculate the Zernike features?:No

DisplayDataOnImage:[module_num:7|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notes:['Display data to visualize parameters for typical nuclei to determine filtering constraints in the next step']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
    Display object or image measurements?:Object
    Select the input objects:Nuc
    Measurement to display:AreaShape_FormFactor
    Select the image on which to display the measurements:Hoechst
    Text color:#FC7F08
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:8|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
    Select the objects to filter:Nuc
    Name the output objects:Nuc_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MeanRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:18
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuc_Filtered
    Name the objects to be identified:All_PolyA
    Select the method to identify the secondary objects:Propagation
    Select the input image:PolyA
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    Regularization factor:0.02
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:400
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    Thresholding method:Otsu

EditObjectsManually:[module_num:10|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notes:['Edit All_Ran. Do not split objects, only delete. Avoid overlapping.']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
    Select the objects to be edited:All_PolyA
    Name the edited objects:Edited_All_PolyA
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:PolyA
    Allow overlapping objects?:No

RelateObjects:[module_num:11|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notes:['Relating Nuc to Edited_All_Ran  - should not matter since Edited_All_Ran should not have been renumbered, but just in case, this step will correctly index the Nuc object. Related output is named Nuc_Ran']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
    Parent objects:Edited_All_PolyA
    Child objects:Nuc_Filtered
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuc_PolyA
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
IdentifyTertiaryObjects:[module_num:12|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notes:['Identify Cyto_Ran by subtracting Nuc_Ran from Edited_All_Ran ']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
    Select the larger identified objects:Edited_All_PolyA
    Select the smaller identified objects:Nuc_PolyA
    Name the tertiary objects to be identified:Cyto_PolyA
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:PolyA
    Select objects to measure:Nuc_PolyA
    Select objects to measure:Cyto_PolyA

CalculateMath:[module_num:14|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
    Name the output measurement:Integrated_NC_Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuc_PolyA
    Select the numerator measurement:Intensity_IntegratedIntensity_PolyA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cyto_PolyA
    Select the denominator measurement:Intensity_IntegratedIntensity_PolyA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:15|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
    Name the output measurement:Mean_NC_Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuc_PolyA
    Select the numerator measurement:Intensity_MeanIntensity_PolyA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cyto_PolyA
    Select the denominator measurement:Intensity_MeanIntensity_PolyA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DisplayDataOnImage:[module_num:16|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notes:['For some reason, DisplayDataOnImage followed by OverlayOutlines works but not the other way around. ']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
    Display object or image measurements?:Object
    Select the input objects:Cyto_PolyA
    Measurement to display:Math_Mean_NC_Ratio
    Select the image on which to display the measurements:PolyA
    Text color:#FB0106
    Name the output image that has the measurements displayed:NC_Ratio
    Font size (points):14
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):15
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:17|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notes:['Overlaying outlines on the N/C ratio displayed image. Grayscale preserves original image much better than Color setting, though visually it’s not as pretty.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NC_Ratio
    Name the output image:NC_Ratio_Image
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:Cyto_PolyA
    Select outline color:Green
    Select objects to display:Nuc_PolyA

DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:Nuc_PolyA
    Measurement to display:Intensity_MeanIntensity_PolyA
    Select the image on which to display the measurements:PolyA
    Text color:#FC7F08
    Name the output image that has the measurements displayed:Nuc_PolyA_MeanIntensity
    Font size (points):14
    Number of decimals:4
    Image elements to save:Image
    Annotation offset (in pixels):25
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Nuc_PolyA_MeanIntensity
    Name the output image:Nuc_PolyA_MeanIntensity_Image
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:Cyto_PolyA
    Select outline color:Green
    Select objects to display:Nuc_PolyA

DisplayDataOnImage:[module_num:20|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
    Display object or image measurements?:Object
    Select the input objects:Cyto_PolyA
    Measurement to display:Intensity_MeanIntensity_PolyA
    Select the image on which to display the measurements:PolyA
    Text color:#FC7F08
    Name the output image that has the measurements displayed:Cyto_PolyA_MeanIntensity
    Font size (points):14
    Number of decimals:4
    Image elements to save:Image
    Annotation offset (in pixels):15
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cyto_PolyA_MeanIntensity
    Name the output image:Cyto_PolyA_MeanIntensity_Image
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:Cyto_PolyA
    Select outline color:Green
    Select objects to display:Nuc_PolyA

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:Cyto_PolyA_MeanIntensity_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:PolyA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Cyto_MeanIntensity
    Saved file format:tiff
    Output file location:Same folder as image|20200301/20200301 DIV14 HaloTag-646 Ran-488 Map2-555/OUTPUT/RETAIN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Nuc_PolyA_MeanIntensity_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:PolyA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Nuc_MeanIntensity
    Saved file format:tiff
    Output file location:Same folder as image|20200301/20200301 DIV14 HaloTag-646 Ran-488 Map2-555/OUTPUT/RETAIN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:NC_Ratio_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:PolyA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:N_C_Ratio
    Saved file format:tiff
    Output file location:Same folder as image|20200301/20200301 DIV14 HaloTag-646 Ran-488 Map2-555/OUTPUT/RETAIN
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|20180312 FISH pilot/OUTPUT/KO208
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuc_PolyA|Parent_Nuc_Filtered,Nuc_PolyA|Number_Object_Number,Nuc_PolyA|Intensity_IntegratedIntensity_PolyA,Nuc_PolyA|Intensity_MeanIntensity_PolyA,Nuc_PolyA|Math_Integrated_NC_Ratio,Nuc_PolyA|Math_Mean_NC_Ratio,Cyto_PolyA|Parent_Edited_All_PolyA,Cyto_PolyA|Parent_Nuc_PolyA,Cyto_PolyA|Number_Object_Number,Cyto_PolyA|Intensity_IntegratedIntensity_PolyA,Cyto_PolyA|Intensity_MeanIntensity_PolyA,Cyto_PolyA|Math_Integrated_NC_Ratio,Cyto_PolyA|Math_Mean_NC_Ratio
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:WT209_
    Overwrite existing files without warning?:No
    Data to export:Cyto_PolyA
    Combine these object measurements with those of the previous object?:No
    File name:PolyA_NC_analysis.csv
    Use the object name for the file name?:No
    Data to export:Nuc_PolyA
    Combine these object measurements with those of the previous object?:Yes
    File name:DATA.csv
    Use the object name for the file name?:No
